PsychoPy2experiment version="2026.1.0"
Settings
  expName = ldt
  runMode = 1
  Experiment info = {"participant":"1","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent trialTiming
      Code Type = Py
      Begin Routine:
        targetFrame = fixFrames + round(soa * refreshHz / 1000)
        firstInterval = len(win.frameIntervals)
        dropsAtStart = win.nDroppedFrames
        win.recordFrameIntervals = True
      End Routine:
        win.recordFrameIntervals = False
        thisExp.addData('dropped_frames', win.nDroppedFrames - dropsAtStart)
        thisExp.addData('recorded_intervals', len(win.frameIntervals) - firstInterval)
        thisExp.addData('trial_last_flip', float(win.lastFrameT))
    TextComponent fixation
      startVal [frame N] = 0
      stopVal [duration (frames)] = fixFrames
      text = +
      letterHeight = 0.05
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    TextComponent prime_text
      startVal [frame N] = fixFrames
      stopVal [duration (frames)] = primeFrames
      text [set every repeat] = $prime
      letterHeight = 0.05
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    TextComponent target_text
      startVal [frame N] = targetFrame
      stopVal [duration (frames)] = responseFrames
      text [set every repeat] = $target.upper()
      letterHeight = 0.05
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    KeyboardComponent decision
      startVal [frame N] = targetFrame
      stopVal [duration (frames)] = responseFrames
      forceEndRoutine = True
      allowedKeys = ["f","j"]
      store = first key
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    CodeComponent scoreTrial
      Code Type = Py
      End Routine:
        pressed = decision.keys in ('f', 'j') and 0 <= decision.rt <= 2.0
        if not pressed:
            # Include a key queued during the last target frame, before the deadline.
            lastKeys = decision.getKeys(keyList=['f', 'j'], waitRelease=False)
            for lastKey in lastKeys:
                if 0 <= lastKey.rt <= 2.0:
                    decision.keys, decision.rt = lastKey.name, lastKey.rt
                    pressed = True
                    break
        expectedKey = wordKey if correct_response == 'word' else nonwordKey
        isCorrect = int(pressed and decision.keys == expectedKey)
        feedbackMessage = ('Correct' if isCorrect else 'Incorrect') if pressed else 'Too slow'
        thisExp.addData('key', decision.keys if pressed else '')
        thisExp.addData('rt', decision.rt if pressed else '')
        thisExp.addData('accuracy', isCorrect)
        thisExp.addData('timeout', int(not pressed))
        thisExp.addData('prime_shown', prime_text.text)
        thisExp.addData('target_shown', target_text.text)
        thisExp.addData('prime_onset', thisExp.thisEntry['prime_text.started'])
        thisExp.addData('target_onset', thisExp.thisEntry['target_text.started'])
  Routine instructions
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    CodeComponent setupTask
      Code Type = Py
      Begin Experiment:
        win.recordFrameIntervals = False
        win.frameIntervals.clear()
        win.refreshThreshold = 1.5 * frameDur
      Begin Routine:
        participantNumber = int(expInfo['participant'])
        listPath = f'trial_lists/trials_p{participantNumber:02d}.csv'
        wordKey, nonwordKey = ('f', 'j') if participantNumber % 2 else ('j', 'f')
        if not expInfo.get('frameRate'):
            raise RuntimeError('Refresh rate could not be measured. Restart on a display with a stable refresh rate.')
        refreshHz = round(expInfo['frameRate'])
        fixFrames = round(0.5 * refreshHz)
        primeFrames = round(0.15 * refreshHz)
        responseFrames = round(2 * refreshHz)
      End Experiment:
        win.saveFrameIntervals(fileName=thisExp.dataFileName + '_frameIntervals.log')
    TextComponent instructionText
      startVal [time (s)] = 0
      text [set every repeat] = $f'Look at the UPPERCASE letters.\n\nPress {wordKey.upper()} for a real English word.\nPress {nonwordKey.upper()} for a made-up word.\n\nUse the keys by themselves. Press SPACE to begin practice.'
      letterHeight = 0.05
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    KeyboardComponent beginKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ["space"]
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  Routine feedback
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    TextComponent feedbackText
      startVal [frame N] = 0
      stopVal [duration (frames)] = refreshHz
      text [set every repeat] = $feedbackMessage
      letterHeight = 0.05
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  Routine interval
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    TextComponent blankScreen
      startVal [frame N] = 0
      stopVal [duration (frames)] = fixFrames
      letterHeight = 0.05
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  Routine rest
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    TextComponent breakText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Practice is complete. Take a break.

        Press SPACE to start the main trials.
    KeyboardComponent resumeKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ["space"]
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  Routine endScreen
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    TextComponent endText
      startVal [frame N] = 0
      stopVal [duration (frames)] = responseFrames
      text = Thank you. The task is complete.
      letterHeight = 0.05
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Flow
  Routine instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = $listPath
    nReps = 1
    Selected rows = 0:8
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine feedback
    Routine interval
  LoopTerminator practice_loop
  Routine rest
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = $listPath
    nReps = 1
    Selected rows = 8:104
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine interval
  LoopTerminator main_loop
  Routine endScreen
